PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = clock
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will be required to watch a white dot go around a circle in a clockwise, sequential manner (like clock's second hand). Occasionally the dot will skip a position and move to the next positon. Press space when this happens, otherwise do not respond. Press space to continue.

        When you are answering feedback, you can use the "up" and "right" arrow keys to move to the next section as well
    KeyboardComponent key_resp
      allowedKeys = 'space','up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    ImageComponent clock
      image [set every repeat] = $picture
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent fixation
      image = images/00.png
      size = (0.9, 0.9)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    KeyboardComponent response_low
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if response_low.keys == "space" and corrAns is not None and corrAns == "space":
          answer = "correct"
        elif response_low.keys is None and corrAns is not None and corrAns == "space":
          answer = "wrong"
        elif response_low.keys == "space" and corrAns is None:
          answer = "wrong"
        else:
          answer = ""
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $answer
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    CodeComponent code_music
      Code Type = Auto->JS
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      Begin Experiment:
        music = sound.Sound("SBP_Mujic_110.wav")
      Begin Routine:
        if trials_low.thisN == 0:
            music.play();
      End Routine:
        if trials_low.thisN == 45:
            music.stop();
  Routine End
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine Trial_2
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    ImageComponent clock_2
      image [set every repeat] = $picture
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent fixation_2
      image = images/00.png
      size = (0.9, 0.9)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    KeyboardComponent response_high
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if response_high.keys == "space" and corrAns is not None and corrAns == "space":
          answer = "correct"
        elif response_high.keys is None and corrAns is not None and corrAns == "space":
          answer = "wrong"
        elif response_high.keys == "space" and corrAns is None:
          answer = "wrong"
        else:
          answer = ""
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $answer
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    CodeComponent code_music_2
      Code Type = Auto->JS
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      Begin Experiment:
        music1 = sound.Sound("SBP_Mujic_180.wav")
      Begin Routine:
        if trials_high.thisN == 0:
            music1.play();
      End Routine:
        if trials_high.thisN == 45:
            music1.stop();
  Routine Instructions_2
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Nicely Done!. Take a break for a minute. Press space to continue when you are ready for the next part.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space','up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Feedback
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    KeyboardComponent key_resp_3
      allowedKeys = 'up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent duration
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Enter Duration
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        How long do you think the task lasted for ( in seconds)?
  Routine Feedback_2
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    KeyboardComponent key_resp_4
      allowedKeys = 'up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent skips
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Enter Number of Skips here
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How many skips were present in the task?
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  Routine Feedback_3
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    KeyboardComponent key_resp_5
      allowedKeys = 'up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = How well do you think you did?
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  Routine Feedback_4
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    KeyboardComponent key_resp_6
      allowedKeys = 'up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent suggestions
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Answer
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Did you like the experiment? Any suggestions?
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Flow
  Routine Instructions
  LoopInitiator trials_low loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture': 'images/01.png', 'corrAns': None},
      {'picture': 'images/02.png', 'corrAns': None},
      {'picture': 'images/03.png', 'corrAns': None},
      {'picture': 'images/05.png', 'corrAns': 'space'},
      {'picture': 'images/06.png', 'corrAns': None},
      {'picture': 'images/08.png', 'corrAns': 'space'},
      {'picture': 'images/10.png', 'corrAns': 'space'},
      {'picture': 'images/11.png', 'corrAns': None},
      {'picture': 'images/13.png', 'corrAns': 'space'},
      {'picture': 'images/14.png', 'corrAns': None},
      {'picture': 'images/15.png', 'corrAns': None},
      {'picture': 'images/16.png', 'corrAns': None},
      {'picture': 'images/18.png', 'corrAns': 'space'},
      {'picture': 'images/20.png', 'corrAns': 'space'},
      {'picture': 'images/21.png', 'corrAns': None},
      {'picture': 'images/22.png', 'corrAns': None},
      {'picture': 'images/23.png', 'corrAns': None},
      {'picture': 'images/24.png', 'corrAns': None},
      {'picture': 'images/25.png', 'corrAns': None},
      {'picture': 'images/27.png', 'corrAns': 'space'},
      {'picture': 'images/28.png', 'corrAns': None},
      {'picture': 'images/29.png', 'corrAns': None},
      {'picture': 'images/31.png', 'corrAns': 'space'},
      {'picture': 'images/32.png', 'corrAns': None},
      {'picture': 'images/33.png', 'corrAns': None},
      {'picture': 'images/34.png', 'corrAns': None},
      {'picture': 'images/36.png', 'corrAns': 'space'},
      {'picture': 'images/37.png', 'corrAns': None},
      {'picture': 'images/38.png', 'corrAns': None},
      {'picture': 'images/40.png', 'corrAns': 'space'},
      {'picture': 'images/41.png', 'corrAns': None},
      {'picture': 'images/43.png', 'corrAns': 'space'}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
    Routine Trial
  LoopTerminator trials_low
  Routine Feedback
  Routine Feedback_2
  Routine Feedback_3
  Routine Feedback_4
  Routine Instructions_2
  LoopInitiator trials_high loopType="TrialHandler"
    conditionsFile = conditions_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture': 'images/01.png', 'corrAns': None},
      {'picture': 'images/02.png', 'corrAns': None},
      {'picture': 'images/04.png', 'corrAns': 'space'},
      {'picture': 'images/06.png', 'corrAns': 'space'},
      {'picture': 'images/07.png', 'corrAns': None},
      {'picture': 'images/09.png', 'corrAns': 'space'},
      {'picture': 'images/10.png', 'corrAns': None},
      {'picture': 'images/11.png', 'corrAns': None},
      {'picture': 'images/12.png', 'corrAns': None},
      {'picture': 'images/13.png', 'corrAns': None},
      {'picture': 'images/15.png', 'corrAns': 'space'},
      {'picture': 'images/16.png', 'corrAns': None},
      {'picture': 'images/17.png', 'corrAns': None},
      {'picture': 'images/19.png', 'corrAns': 'space'},
      {'picture': 'images/20.png', 'corrAns': None},
      {'picture': 'images/21.png', 'corrAns': None},
      {'picture': 'images/23.png', 'corrAns': None},
      {'picture': 'images/25.png', 'corrAns': 'space'},
      {'picture': 'images/26.png', 'corrAns': None},
      {'picture': 'images/27.png', 'corrAns': None},
      {'picture': 'images/29.png', 'corrAns': 'space'},
      {'picture': 'images/30.png', 'corrAns': None},
      {'picture': 'images/32.png', 'corrAns': 'space'},
      {'picture': 'images/33.png', 'corrAns': None},
      {'picture': 'images/34.png', 'corrAns': None},
      {'picture': 'images/36.png', 'corrAns': 'space'},
      {'picture': 'images/37.png', 'corrAns': None},
      {'picture': 'images/38.png', 'corrAns': None},
      {'picture': 'images/40.png', 'corrAns': 'space'},
      {'picture': 'images/41.png', 'corrAns': None},
      {'picture': 'images/42.png', 'corrAns': None},
      {'picture': 'images/44.png', 'corrAns': 'space'}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
    Routine Trial_2
  LoopTerminator trials_high
  Routine Feedback
  Routine Feedback_2
  Routine Feedback_3
  Routine Feedback_4
  Routine End
