PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = clock
  keyboardBackend = ioHub
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Routines
  Routine End
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine Fill_the_Survey
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your first task is now complete.

        Call the experimenter to fill out the questionnaire.
    KeyboardComponent key_resp
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_123Poo_normal
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Ready
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = Steady
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = GO!!!
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  Routine Instructions
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    TextComponent instructions_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Task instructions:

        In this task you will be required to watch a white spot hopping around a circles which are arranged in a circle.

        Occasionally the spot will skip a circle. Your task is to ONLY press the space bar when the spot skips a circle, and to NOT press the space bar for all other times.

        Ask the experimenter if you have any questions.

        Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space','up','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trail_2
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    ImageComponent clock_2
      image [set every repeat] = $picture
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent fixation_2
      image = images/00.png
      size = (0.9, 0.9)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent response_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if response_2.keys == "space" and corrAns is not None and corrAns == "space":
          answer = "✅"
        elif response_2.keys is None and corrAns is not None and corrAns == "space":
          answer = "❌"
        elif response_2.keys == "space" and corrAns is None:
          answer = "❌"
        else:
          answer = "➕"
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $answer
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    CodeComponent code_music_2
      Code Type = Auto->JS
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      Begin Experiment:
        music2 = sound.Sound("SBP_Mujic_110.wav")
      Begin Routine:
        if trials_2.thisN == 0:
            music2.play();
      End Routine:
        if trials_2.thisN == 45:
            music2.stop();
  Routine Trial_1
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    ImageComponent clock
      image [set every repeat] = $picture
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent fixation
      image = images/00.png
      size = (0.9, 0.9)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent response_1
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if response_1.keys == "space" and corrAns is not None and corrAns == "space":
          answer = "✅"
        elif response_1.keys is None and corrAns is not None and corrAns == "space":
          answer = "❌"
        elif response_1.keys == "space" and corrAns is None:
          answer = "❌"
        else:
          answer = "➕"
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $answer
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    CodeComponent code_music
      Code Type = Auto->JS
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      Begin Experiment:
        music = sound.Sound("SBP_Mujic_180.wav")
      Begin Routine:
        if trials_1.thisN == 0:
            music.play();
      End Routine:
        if trials_1.thisN == 45:
            music.stop();
Flow
  Routine Instructions
  Routine routine_123Poo_normal
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture': 'images/01.png', 'corrAns': None},
      {'picture': 'images/02.png', 'corrAns': None},
      {'picture': 'images/03.png', 'corrAns': None},
      {'picture': 'images/04.png', 'corrAns': None},
      {'picture': 'images/06.png', 'corrAns': 'space'},
      {'picture': 'images/07.png', 'corrAns': None},
      {'picture': 'images/08.png', 'corrAns': None},
      {'picture': 'images/09.png', 'corrAns': None},
      {'picture': 'images/10.png', 'corrAns': None},
      {'picture': 'images/11.png', 'corrAns': None},
      {'picture': 'images/12.png', 'corrAns': None},
      {'picture': 'images/13.png', 'corrAns': None},
      {'picture': 'images/15.png', 'corrAns': 'space'},
      {'picture': 'images/16.png', 'corrAns': None},
      {'picture': 'images/17.png', 'corrAns': None},
      {'picture': 'images/01.png', 'corrAns': 'space'},
      {'picture': 'images/02.png', 'corrAns': None},
      {'picture': 'images/03.png', 'corrAns': None},
      {'picture': 'images/04.png', 'corrAns': None},
      {'picture': 'images/06.png', 'corrAns': 'space'},
      {'picture': 'images/08.png', 'corrAns': 'space'},
      {'picture': 'images/09.png', 'corrAns': None},
      {'picture': 'images/10.png', 'corrAns': None},
      {'picture': 'images/11.png', 'corrAns': None},
      {'picture': 'images/12.png', 'corrAns': None},
      {'picture': 'images/13.png', 'corrAns': None},
      {'picture': 'images/15.png', 'corrAns': 'space'},
      {'picture': 'images/16.png', 'corrAns': None},
      {'picture': 'images/17.png', 'corrAns': None},
      {'picture': 'images/01.png', 'corrAns': 'space'},
      {'picture': 'images/02.png', 'corrAns': None},
      {'picture': 'images/03.png', 'corrAns': None}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
    Routine Trial_1
  LoopTerminator trials_1
  Routine Fill_the_Survey
  Routine Instructions
  Routine routine_123Poo_normal
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'picture_2': 'images/12.png', 'corrAns_2': None},
      {'picture_2': 'images/13.png', 'corrAns_2': None},
      {'picture_2': 'images/14.png', 'corrAns_2': None},
      {'picture_2': 'images/15.png', 'corrAns_2': None},
      {'picture_2': 'images/16.png', 'corrAns_2': None},
      {'picture_2': 'images/17.png', 'corrAns_2': None},
      {'picture_2': 'images/01.png', 'corrAns_2': 'space'},
      {'picture_2': 'images/02.png', 'corrAns_2': None},
      {'picture_2': 'images/04.png', 'corrAns_2': 'space'},
      {'picture_2': 'images/05.png', 'corrAns_2': None},
      {'picture_2': 'images/07.png', 'corrAns_2': 'space'},
      {'picture_2': 'images/08.png', 'corrAns_2': None},
      {'picture_2': 'images/10.png', 'corrAns_2': 'space'},
      {'picture_2': 'images/11.png', 'corrAns_2': None},
      {'picture_2': 'images/12.png', 'corrAns_2': None},
      {'picture_2': 'images/13.png', 'corrAns_2': None},
      {'picture_2': 'images/14.png', 'corrAns_2': None},
      {'picture_2': 'images/15.png', 'corrAns_2': None},
      {'picture_2': 'images/16.png', 'corrAns_2': None},
      {'picture_2': 'images/17.png', 'corrAns_2': None},
      {'picture_2': 'images/18.png', 'corrAns_2': None},
      {'picture_2': 'images/01.png', 'corrAns_2': None},
      {'picture_2': 'images/03.png', 'corrAns_2': 'space'},
      {'picture_2': 'images/04.png', 'corrAns_2': None},
      {'picture_2': 'images/05.png', 'corrAns_2': None},
      {'picture_2': 'images/07.png', 'corrAns_2': 'space'},
      {'picture_2': 'images/08.png', 'corrAns_2': None},
      {'picture_2': 'images/09.png', 'corrAns_2': None},
      {'picture_2': 'images/10.png', 'corrAns_2': None},
      {'picture_2': 'images/11.png', 'corrAns_2': None}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
    Routine Trail_2
  LoopTerminator trials_2
  Routine Fill_the_Survey
  Routine End
